PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1710, 1107]
  expName = PSYC5P02Builder
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #List of possible target colours
        tagret_stim = ['images/green_alien.png', 'images/red_alien.png']

        #Shuffel the list
        shuffle(target_stim)

        #Pick one target stim
        Timage = image_stim[0]

        #Save to output
        thisExp.addData('Target image', Timage)
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    ImageComponent Cue
      image = images/red_alien.png
      ori [set every repeat] = cue_ori
      pos = (0, -4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
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    ImageComponent Image
      image [set every repeat] = $tImage
      pos [set every repeat] = (target_x, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.6
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    KeyboardComponent Targ_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.6
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  Routine Instructions
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    TextComponent Inst_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the button assosicated with the side the target is on. 
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    KeyboardComponent Start_Resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
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    ImageComponent image
      image = images/asteroid.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        if corr ==1:
            image = 'images/star.png'
        else:
            image = 'images/asteroid.png'
Flow
  Routine Instructions
  LoopInitiator Blocks loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine trial
    LoopTerminator trials
    Routine Feedback
  LoopTerminator Blocks
